CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RunImageJMacro:[module_num:5|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
    Hidden:1
    Hidden:1
    Hidden:0
    Executable directory:Elsewhere...|/Applications
    Executable:Fiji.app
    Macro directory:Elsewhere...|/Users/bcimini/Desktop
    Macro:test_ball_macro.py
    What variable in your macro defines the folder ImageJ should use?:directory
    Select an image to send to your macro:DNA
    What should this image temporarily saved as?:dummy.tiff
    What is the image filename CellProfiler should load?:backsub.tiff
    What should CellProfiler call the loaded image?:backsub

Smooth:[module_num:6|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enabled:False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
    Select the input image:DNA
    Name the output image:backsub
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:16.0
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
SaveImages:[module_num:7|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
    Select the type of image to save:Image
    Select the image to save:backsub
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_backsub
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:8|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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